{
    "io": {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-55658.xml-final",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-55790_purdue.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "arm": "MTMR-55790.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-79204_purdue.xml",
            "pid": "sawControllersPID-MTML.xml",
            "arm": "MTML-79204.json"
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}