{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-79204_purdue.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-55790_purdue.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
}
