{
    "io": {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml",
        "simulation": "KINEMATIC"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "pid": "sawControllersPID-PSM.xml",
            "simulation": "KINEMATIC",
            "kinematic": "psm-large-needle-driver.json",
            "base-frame": {
                "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,          0.0 ],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1"
        }
    ]
}